PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Delay Discounting Task
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = extras/DelayDiscounting_Conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11.0, 'future_reward': 30.0, 'delay': 7.0},
      {'reward_today': 12.0, 'future_reward': 32.0, 'delay': 8.0},
      {'reward_today': 13.0, 'future_reward': 33.0, 'delay': 9.0},
      {'reward_today': 14.0, 'future_reward': 34.0, 'delay': 10.0},
      {'reward_today': 15.0, 'future_reward': 35.0, 'delay': 13.0},
      {'reward_today': 16.0, 'future_reward': 37.0, 'delay': 14.0},
      {'reward_today': 17.0, 'future_reward': 38.0, 'delay': 15.0},
      {'reward_today': 18.0, 'future_reward': 39.0, 'delay': 16.0},
      {'reward_today': 19.0, 'future_reward': 40.0, 'delay': 17.0},
      {'reward_today': 20.0, 'future_reward': 42.0, 'delay': 18.0},
      {'reward_today': 21.0, 'future_reward': 43.0, 'delay': 19.0},
      {'reward_today': 22.0, 'future_reward': 44.0, 'delay': 20.0},
      {'reward_today': 23.0, 'future_reward': 46.0, 'delay': 22.0},
      {'reward_today': 24.0, 'future_reward': 47.0, 'delay': 23.0},
      {'reward_today': 25.0, 'future_reward': 48.0, 'delay': 24.0},
      {'reward_today': 26.0, 'future_reward': 49.0, 'delay': 25.0},
      {'reward_today': 27.0, 'future_reward': 50.0, 'delay': 21.0},
      {'reward_today': 28.0, 'future_reward': 52.0, 'delay': 26.0},
      {'reward_today': 29.0, 'future_reward': 53.0, 'delay': 27.0},
      {'reward_today': 30.0, 'future_reward': 54.0, 'delay': 28.0},
      {'reward_today': 31.0, 'future_reward': 55.0, 'delay': 29.0},
      {'reward_today': 32.0, 'future_reward': 57.0, 'delay': 30.0},
      {'reward_today': 33.0, 'future_reward': 58.0, 'delay': 31.0},
      {'reward_today': 34.0, 'future_reward': 59.0, 'delay': 32.0},
      {'reward_today': 35.0, 'future_reward': 60.0, 'delay': 33.0}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
    Routine trial
  LoopTerminator trials
