PsychoPy2experiment version="2025.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = Solo1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine ShowNumber
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $numberToRemember
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    PolygonComponent Fixation1
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_2
      Code Type = Auto->JS
      Begin Routine:
        if load == 'no':
            continueRoutine = False
  Routine MotorTask
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = star7
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'z', 'x', 'c', 'v'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine NumberRecall
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [condition] = load == 'yes'
      text = Please type the number you saw.
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = Type here...
      size = (0.5, 0.2)
      startVal [condition] = load == 'yes'
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if load == 'no':
            continueRoutine = False
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [condition] = load == 'yes'
      text [set every repeat] = submit
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  Routine FixBetween
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/ASUS/Downloads/Conditions_Solo.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'load': 'yes', 'numberToRemember': 614.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 907.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 352.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 781.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 426.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 539.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 168.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 832.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 294.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 705.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 961.0, 'sequenceInfo': 'seq1'},
      {'load': 'no', 'numberToRemember': None, 'sequenceInfo': 'seq2'},
      {'load': 'yes', 'numberToRemember': 143.0, 'sequenceInfo': 'seq1'}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
    Routine ShowNumber
    Routine FixBetween
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = extras/MSL_Conditions.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
        OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
        OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
        OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
      Routine MotorTask
      Routine FixBetween
    LoopTerminator trials_2
    Routine NumberRecall
  LoopTerminator trials
