PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = StroopTask
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $Color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $Correct_Response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome!
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  Routine Thankyou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thankyou!!!!!
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Kashish/Downloads/StroopTask.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'Word': 'RED', 'Color': 'red', 'Stimulus_Condition': 'C', 'Correct_Response': 'r'},
      {'Word': 'RED', 'Color': 'blue', 'Stimulus_Condition': 'I', 'Correct_Response': 'b'},
      {'Word': 'BLUE', 'Color': 'red', 'Stimulus_Condition': 'I', 'Correct_Response': 'r'},
      {'Word': 'BLUE', 'Color': 'blue', 'Stimulus_Condition': 'C', 'Correct_Response': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine Thankyou
