PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Word Priming
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent mouse
      clickable = $text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = extras/study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'Laptop'},
      {'study_word': 'Chart '},
      {'study_word': 'Tshirt '},
      {'study_word': 'Mouse '},
      {'study_word': 'Pastry '},
      {'study_word': 'Case'},
      {'study_word': 'Cruise '},
      {'study_word': 'Police '},
      {'study_word': 'Keys '},
      {'study_word': 'Poster '},
      {'study_word': 'Board '},
      {'study_word': 'Marble '},
      {'study_word': 'Phone '},
      {'study_word': 'Book'},
      {'study_word': 'Cushion '},
      {'study_word': 'Table '},
      {'study_word': 'Pencil'},
      {'study_word': 'Vase '},
      {'study_word': 'Bottle'},
      {'study_word': 'Camera '}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = extras/test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': 'L_pt_p', 'Reference': 'Laptop', 'old_new': 'old '},
      {'test_words': '_ha_t', 'Reference': 'Chart ', 'old_new': 'old '},
      {'test_words': 't_hi_t', 'Reference': 'Tshirt ', 'old_new': 'old '},
      {'test_words': '_ou_se', 'Reference': 'Mouse ', 'old_new': 'old '},
      {'test_words': 'P_s_r_', 'Reference': 'Pastry ', 'old_new': 'old '},
      {'test_words': 'c_s_', 'Reference': 'Case', 'old_new': 'old '},
      {'test_words': '_ru_s_', 'Reference': 'Cruise ', 'old_new': 'old '},
      {'test_words': 'P_li_e', 'Reference': 'Police ', 'old_new': 'old '},
      {'test_words': 'K_y_', 'Reference': 'Keys ', 'old_new': 'old '},
      {'test_words': 'P_st_r', 'Reference': 'Poster ', 'old_new': 'old '},
      {'test_words': '_o_rd', 'Reference': 'Board ', 'old_new': 'old '},
      {'test_words': '_a_bl_', 'Reference': 'Marble ', 'old_new': 'old '},
      {'test_words': '_ho_e', 'Reference': 'Phone ', 'old_new': 'old '},
      {'test_words': '_oo_', 'Reference': 'Book', 'old_new': 'old '},
      {'test_words': 'C_s_io_', 'Reference': 'Cushion ', 'old_new': 'old '},
      {'test_words': 'Ta_l_', 'Reference': 'Table ', 'old_new': 'new'},
      {'test_words': 'P_nc_l', 'Reference': 'Pencil', 'old_new': 'new'},
      {'test_words': 'V_s_', 'Reference': 'Vase ', 'old_new': 'new'},
      {'test_words': 'Bo_t_e', 'Reference': 'Bottle', 'old_new': 'new'},
      {'test_words': 'C_m_ra', 'Reference': 'Camera ', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
